PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'counterbalance': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = simon_task
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine simon_trial
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    TextComponent fixation_cross
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent left_stim
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $left_stim_text
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    TextComponent right_stim
      letterHeight = 0.05
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $right_stim_text
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    TextComponent ITI
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text = +
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    KeyboardComponent resp
      allowedKeys = 'z','m'
      correctAns = $ans
      forceEndRoutine = False
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.8
      storeCorrect = True
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  Routine simon_setup
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    CodeComponent simon_config
      Code Type = Auto->JS
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      Before Experiment:
        left_stim_text = ''
        right_stim_text = ''
        print(f"Initial values - left_stim_text: {left_stim_text}, right_stim_text: {right_stim_text}")
      Begin Routine:
        left_stim_text = ''
        right_stim_text = ''
        ans = ''  # Default answer variable

        # Debugging: Verify initialization
        print(f"Initial values - left_stim_text: {left_stim_text}, right_stim_text: {right_stim_text}")

        # Trial loop
        for thisTrial in trials:
            # Debugging: Verify thisTrial content
            print(f"Current trial: {thisTrial}")

            # Check if keys exist in thisTrial
            if 'conditions' in thisTrial and 'stim' in thisTrial:
                if expInfo['counterbalance'] == 'O':
                    if thisTrial['conditions'] == 'incongruent':
                        if thisTrial['stim'] == 'X':
                            left_stim_text = thisTrial['stim']
                            right_stim_text = ''
                            ans = 'm'
                        elif thisTrial['stim'] == 'O':
                            left_stim_text = ''
                            right_stim_text = thisTrial['stim']
                            ans = 'z'
                    elif thisTrial['conditions'] == 'congruent':
                        if thisTrial['stim'] == 'X':
                            left_stim_text = thisTrial['stim']
                            right_stim_text = ''
                            ans = 'm'
                        elif thisTrial['stim'] == 'O':
                            left_stim_text = thisTrial['stim']
                            right_stim_text = ''
                            ans = 'z'
            else:
                print("Error: Missing 'conditions' or 'stim' in thisTrial.")
                left_stim_text = ''
                right_stim_text = ''

            # Debugging: Print values before using them
            print(f"left_stim_text: {left_stim_text}, right_stim_text: {right_stim_text}, ans: {ans}")

            # Update stimuli text
            left_stim.setText(left_stim_text)
            right_stim.setText(right_stim_text)
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = simon-task_order.xlsx
    loopType = sequential
    nReps = 2
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    conditions:
      [{'conditions': 'incongruent', 'stim': 'X'},
      {'conditions': 'congruent', 'stim': 'X'},
      {'conditions': 'incongruent', 'stim': 'O'},
      {'conditions': 'congruent', 'stim': 'O'}]
    Routine simon_setup
    Routine simon_trial
  LoopTerminator trials
